OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Jozef Legény
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP Acquisition Test
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Identity => #1
-> Channel Selector "2:2"
  Channel List = 2:2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Alpha band filter" => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 1
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch duration (in sec) = 5
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #6
Data=#6 -> Signal display "Alpha band power"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 2
  Vertical Scale = 200
  Vertical Offset = 0
  Time Scale = 12
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
Data=#3 -> Signal display "Alpha wave"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 2
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
#1 -> Temporal filter "60Hz notch filter"
  Filter Method = Butterworth
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 59
  High Cut-off Frequency (Hz) = 61
  Band Pass Ripple (dB) = 0.5
-> Temporal filter "Bandpass Filter" => #10
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 1
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 100
  Pass band ripple (dB) = 0.500000
Data=#10 -> Signal display "Bandpass Filtered from 1-100Hz"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 2
  Vertical Scale = 200
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
Data=#1 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 2
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
Input stream=#1 -> 0x341d3912 CSV File Writer
  Filename = C:/Users/nhatpham/Desktop/OpenVIBE/Test_Run_0223/record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false

0x341d3912 CSV File Reader
  Filename = C:/Users/nhatpham/Desktop/OpenVIBE/Test_Run_0218/record-[2019.02.18-20.13.55].csv
