OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Jozef Legény
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP Acquisition Test
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Acquisition test

  Scenario used for testing data acquisition. The signal quality should
  always be checked before training.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Identity => #1
-> Simple DSP
  Equation = x/100
-> Temporal filter "60Hz notch filter"
  Filter Method = Butterworth
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 59
  High Cut-off Frequency (Hz) = 61
  Band Pass Ripple (dB) = 0.5
-> Temporal filter "Bandpass Filter" => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 1
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 100
  Pass band ripple (dB) = 0.500000
-> Crop
  Crop method = Min/Max
  Min crop value = -50
  Max crop value = 50
-> Channel Selector "1:1" => #6
  Channel List = 1:1
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Alpha band filter" => #7
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch duration (in sec) = 5
  Epoch intervals (in sec) = 1
-> Simple DSP
  Equation = x*x
-> Signal average => #10
Data=#10 -> Signal display "Alpha band power"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 2
  Vertical Scale = 60
  Vertical Offset = 39
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
Data=#7 -> Signal display "Alpha wave"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 2
  Vertical Scale = 80
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
#6 -> Temporal filter "Beta band filter" => #13
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 24
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch duration (in sec) = 5
  Epoch intervals (in sec) = 1
-> Simple DSP
  Equation = x*x
-> Signal average => #16
Data=#16 -> Signal display "Beta band power"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 2
  Vertical Scale = 60
  Vertical Offset = 39
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
Data=#13 -> Signal display "Beta wave"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 2
  Vertical Scale = 80
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
#6 -> Time based epoching
  Epoch duration (in sec) = 5
  Epoch intervals (in sec) = 1
-> Spectral analysis => #20
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#20.Amplitude -> Power spectrum display
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = true
  Gain = 0.0001
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Matrix=#20.Amplitude -> Stacked Bitmap (Horizontal)
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 10
  Matrix Count = 50
  Gain = 0.0001
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#4 -> Signal display "Bandpass Filtered from 1-100Hz"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 2
  Vertical Scale = 200
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
Data=#1 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 2
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
Input stream=#1 -> 0x341d3912 CSV File Writer
  Filename = C:/Users/nhatpham/Desktop/TestWithGalen/OpenVIBE/record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false

0x341d3912 CSV File Reader
  Filename = C:/Users/nhatpham/Desktop/OpenVIBE/ASSR_0307/record-[2019.03.07-18.49.31].csv
