OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Jozef Legény
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP Acquisition Test
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Acquisition test

  Scenario used for testing data acquisition. The signal quality should
  always be checked before training.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Identity => #1
-> Channel Selector "1:2" => #2
  Channel List = 1:2
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = x/100
-> Temporal filter "60Hz notch filter"
  Filter Method = Butterworth
  Filter Type = Band Stop
  Filter Order = 10
  Low Cut-off Frequency (Hz) = 58
  High Cut-off Frequency (Hz) = 62
  Band Pass Ripple (dB) = 0.5
-> Temporal filter "Bandpass Filter" => #5
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 6
  Low cut frequency (Hz) = 0.3
  High cut frequency (Hz) = 100
  Pass band ripple (dB) = 0.500000
-> Temporal filter "EMG Bandpass Filter" => #6
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 3
  Low cut frequency (Hz) = 10.000000
  High cut frequency (Hz) = 100.000000
  Pass band ripple (dB) = 0.500000
Data=#6 -> Signal display "EMG Signal"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 2
  Vertical Scale = 200
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
#5 -> Temporal filter "EOG Bandpass Filter" => #8
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 6
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 10
  Pass band ripple (dB) = 0.500000
Data=#8 -> Signal display "EOG and Eyeblinks"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 2
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
Data=#5 -> 0x341d3912 Signal display "Bandpass Filtered from 1-100Hz"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 2
  Vertical Scale = 200
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
#5 -> Temporal filter "EEG Bandpass Filter" => #11
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.500000
-> 0x341d3912 Spectral analysis => #12
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#12.Amplitude -> 0x341d3912 Power spectrum display
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = true
  Gain = 0.001
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Matrix=#12.Amplitude -> 0x341d3912 Stacked Bitmap (Horizontal)
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 10
  Matrix Count = 50
  Gain = 0.005
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#11 -> Signal display "EEG"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 2
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
Data=#2 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 2
  Vertical Scale = 100000
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
#1 -> 0x341d3912 Channel Selector "9:9"
  Channel List = 9:9
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 Signal average
-> 0x341d3912 Matrix Display "Battery (%)"
  Color gradient = 0:100,100,100; 100:100,100,100
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#1 -> Channel Selector "3:8" => #20
  Channel List = 3:8
  Action = Select
  Channel Matching Method = Smart
Data=#20 -> Signal display "Motion"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 2
  Vertical Scale = 100000
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
Data=#1 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 2
  Vertical Scale = 100000
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
Input stream=#1 -> 0x341d3912 CSV File Writer
  Filename = C:/Users/phamh/Desktop/DataCollectionTest/record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false

0x341d3912 CSV File Reader
  Filename = C:/Users/phamh/Desktop/DataCollection/record-[2020.07.29-20.56.29].csv
